PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = smell_experiment_v13
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Routines
  Routine Welcome_screen
    TextComponent text_welcome_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ознакомтесь с инструкцией.

        Для начала эксперимента нажмите пробел или джойстик.
    KeyboardComponent key_resp
      allowedKeys = 'q','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_initial
    CodeComponent code_at_start
      Code Type = Py
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      Begin Experiment:
        import random
        import serial

        from time import sleep


        #port settings
        settings = {"port": "COM3",
                          "baudrate": 115200,
                          "timeout": 1}

        #randomize random
        random.seed()

        #initialize list for smells
        smells=[1,2,3,4]

        #initialize odor names
        odor_keys_list = ['3', '5', '7', 'Null']

        #create odor counter
        odor_dict = {key: 0 for key in odor_keys_list}

        #initialize list for symbols
        symbols_set=['t','s','c','z']

        #shuffle order of symbols
        random.shuffle(symbols_set)

        #initialise dict for symbols
        symbols={}
        for i in range(4):
            symbols[i]=symbols_set[i]

        #set study_number
        study_number=0

        #set test_number
        test_number=0

        #set trial_number
        trial_number=0

        #set limiter for each stimulus
        limit_study = 2
        limit_test = 2



        def eject(smell_correct):

            """Eject the stimulus given selected odor. See params in serial.Serial() documentation."""

            if "Null" != odor_keys_list[smell_correct]:
                msg = "w" + odor_keys_list[smell_correct] + ";" + " 1\n"
                ser.write(msg.encode())
                print("The following command has been sent: \n" +  ">" + msg)
            else:
                #just go on if the stimulus is empty
                #Maybe it's better to include this part in the statement above
                #as the user will hear the "pss" sound
                pass


        def close_current_capsule(smell_correct):

            """Stop the last stimulus. See params in serial.Serial() documentation."""

            if "Null" != odor_keys_list[smell_correct]:
                msg = "w" + odor_keys_list[smell_correct] + ";" + " 0\n"
                ser.write(msg.encode())
                print("The following command has been sent: \n" +  ">" + msg)
            else:
                #just go on if the stimulus is empty
                #Maybe it's better to include this part in the statement above
                #as the user will hear the "pss" sound
                pass

        print("Initialized successfully.")
  Routine code_study
    CodeComponent code_for_study_trial
      Code Type = Py
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      Before Experiment:
        #image_for_study="stimulus/bsbtbzrc.jpeg"
        study_order=[0,1,2,3]
        keys=['up','right','down','left']
      Begin Routine:
        #open port
        while continueRoutine:
            try:
                ser = serial.Serial(**settings)
                print("The port has been opened.")

            except (FileNotFoundError, serial.SerialException):
                print("Test session error. Double check the port!")
                askedInput = str(input(">>>Want to start over? Type Y or N:\n")).lower()
                if askedInput == "y":
                    continue
                elif askedInput == "n":
                    print("Finishing experiment...")
                    core.quit()
                else:
                    print("Don't get your input. Try Y or N next time.\nTrying to open the port now...")


        study_display_order=['t','s','c','z']

        #shuffle order to present symbols
        random.seed()
        random.shuffle(study_display_order)

        #reset name of file to display
        image_for_study="stimuli/"

        #choose the stimulus
        smell_correct=random.randrange(4)

        #update number of stimuli presented
        while True:
            if odor_dict[odor_keys_list[smell_correct]] < limit_study:
                odor_dict[odor_keys_list[smell_correct]] += 1
                break

            else:
                smell_correct = random.randrange(4)
                continue

        #open port and eject stimulus
        eject(smell_correct)

        #set correct symbol
        correct_symbol=symbols[smell_correct]

        #create name of file to display
        for i in range(4):
            if correct_symbol == study_display_order[i]:
                #choose red if symbol represents correct smell
                image_for_study+='r'
                correct_key=keys[i]
            else:
                #choose black for other symbols
                image_for_study+='b'
            #add symbol name according to display order
            image_for_study+=str(study_display_order[i])

        #add .jpg to the filename
        image_for_study+='.jpeg'

        #set next study_number
        study_number+=1

        #set next trial_number
        trial_number+=1

        #add data to the file
        thisExp.addData('correct_smell', smell_correct)
        thisExp.addData('correct_symbol', correct_symbol)
        thisExp.addData('image_for_study', image_for_study)
        thisExp.addData('correct_key', correct_key)
        thisExp.addData('study_number', study_number)
        thisExp.addData('trial_number', trial_number)
      End Routine:
        #shut down current working capsule (stops stimulus)
        close_current_capsule(smell_correct)
  Routine study_trial
    PolygonComponent polygon_study_background
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent image_study
      image [set every repeat] = $image_for_study
      size = (1.5, 0.85)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_study_trial
      allowedKeys [set every repeat] = correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine blank_500
    PolygonComponent polygon_blank_500
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine second_start__screen
    TextComponent text_second_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Прослушайте интрукции для второй части эксперимента.

        Нажмите пробел или джойстик.
    KeyboardComponent key_resp_second_start
      allowedKeys = 'q','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_trial
    PolygonComponent background_test_trail
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent image_test
      image [set every repeat] = $image_for_test
      size = (1.5, 0.85)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_test_trial
      allowedKeys = 'up','down','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_test
    CodeComponent code_for_test
      Code Type = Py
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      Begin Routine:
        #open port
        continueRoutine = True
        while continueRoutine:
            try:
                ser = serial.Serial(**settings)
                print("The port has been opened.")

            except (FileNotFoundError, serial.SerialException):
                print("Test session error. Double check the port!")
                askedInput = str(input("Want to start over? Type Y or N:\n"))
                if askedInput == "Y" or askedInput == "y":
                    continue
                elif askedInput == "N" or askedInput == "n":
                    print("Finishing experiment...")
                    core.quit()
                else:
                    print("Don't get your input. Try Y or N next time.\nTrying to open the port now...")

        test_display_order=['t','s','c','z']

        #shuffle order of symbols to display
        random.seed()
        random.shuffle(test_display_order)

        #set number for the smell
        smell_correct = random.randrange(4)

        while True:
            if odor_dict[odor_keys_list[smell_correct]] < limit_test:
                odor_dict[odor_keys_list[smell_correct]] += 1
                break

            else:
                smell_correct = random.randrange(4)
                continue

        #open port and eject stimulus
        eject(smell_correct)

        #set correct symbol
        correct_symbol=symbols[smell_correct]

        #reset name of file to siplay
        image_for_test="stimuli/"

        #create name of file to display
        for i in range(4):
            image_for_test +='b'
            image_for_test +=str(test_display_order[i])
        image_for_test +='.jpeg'

        #set next test_number
        test_number+=1
        #set next trial_number
        trial_number+=1

        #add data to the file
        thisExp.addData('correct_smell', smell_correct)
        thisExp.addData('correct_symbol', correct_symbol)
        thisExp.addData('image_for_study', image_for_study)
        thisExp.addData('test_number', test_number)
        thisExp.addData('trial_number', trial_number)
      End Routine:
        #shut down current working capsule (stops stimulus)
        close_current_capsule(smell_correct)
  Routine end_screen
    TextComponent text_end_screen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Спасибо!

        Эксперимент закончен.
    KeyboardComponent key_resp_2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine DEMO
  Routine Smell_creen_with_code
    PolygonComponent background_for_smell_screen
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent fixation_point_during_smell
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Pause_screen
    PolygonComponent backgound_for_pause_creen
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent cross_for_pause_screen
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Start_trial_screen
    PolygonComponent background_start_trial_screen
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text__for_start_trial_screen
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Нажмите пробел или джойстик
        для подачи запаха
    KeyboardComponent key_resp_for_start_trial
      allowedKeys = 'q','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you_screen_end_of_trial
    PolygonComponent background_for_end_trial
      fillColor = white
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    TextComponent text_for_end_trial
      color = Black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Спасибо!

        Подготовтесь к следующему запаху.
  Routine codeTest_Finished
    CodeComponent codeTestFinished
      Code Type = Auto->JS
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      Begin Routine:
        if sum(odor_dict.values()) == limit_test*4:
                Test_trials.finished = True
                ser.close()
  Routine codeStudy_Finished
    CodeComponent codeStudyFinished
      Code Type = Auto->JS
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      Begin Routine:
        if sum(odor_dict.values()) == limit_study*4:
                odor_dict = {key: 0 for key in odor_keys_list}
                Study_trials.finished = True
                ser.close()
Flow
  Routine code_initial
  Routine Welcome_screen
  LoopInitiator Study_trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine Start_trial_screen
    Routine Pause_screen
    Routine code_study
    Routine Smell_creen_with_code
    Routine study_trial
    Routine blank_500
    Routine codeStudy_Finished
  LoopTerminator Study_trials
  Routine second_start__screen
  LoopInitiator Test_trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine Start_trial_screen
    Routine Pause_screen
    Routine code_test
    Routine Smell_creen_with_code
    Routine test_trial
    Routine blank_500
    Routine codeTest_Finished
  LoopTerminator Test_trials
  Routine end_screen
